PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  expName = flanker_task
  Screen = 1
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Routines
  Routine fixation
    PolygonComponent polygon
      shape = cross
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.5
      lineWidth = 0.5
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  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 0.8
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      image [set every repeat] = $img
      size = (1, 1)
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    KeyboardComponent key_answer
      correctAns = $corrAns
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine response
    KeyboardComponent key
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text
      text = Lets start with the real experiment Press space to start
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = common\conditions_arrows_images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition', u'congruent_left'), ('img', u'common/congruent_left.png'), ('corrAns', u'left')]),
      OrderedDict([('condition', u'incongruent_left'), ('img', u'common/incongruent_left.png'), ('corrAns', u'left')]),
      OrderedDict([('condition', u'congruent_right'), ('img', u'common/congruent_right.png'), ('corrAns', u'right')]),
      OrderedDict([('condition', u'incongruent_right'), ('img', u'common/incongruent_right.png'), ('corrAns', u'right')])]
    Routine fixation
    Routine trial
  LoopTerminator trials_2
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = common\conditions.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('condition', u'congruent_left'), ('img', u'common/congruent_left.png'), ('corrAns', u'left')]),
      OrderedDict([('condition', u'incongruent_left'), ('img', u'common/incongruent_left.png'), ('corrAns', u'left')]),
      OrderedDict([('condition', u'congruent_right'), ('img', u'common/congruent_right.png'), ('corrAns', u'right')]),
      OrderedDict([('condition', u'incongruent_right'), ('img', u'common/incongruent_right.png'), ('corrAns', u'right')])]
    Routine fixation
    Routine trial
  LoopTerminator trials
