PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  expName = flanker_task_symbols
  Screen = 1
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Routines
  Routine fixation
    PolygonComponent polygon_2
      shape = cross
      startVal [time (s)] = 0.0
      size = (0.1, 0.1)
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 0.5
      lineWidth = 0.5
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  Routine trial
    TextComponent text
      text [set every repeat] = $condition
      stopVal [duration (s)] = 0.8
      startVal [time (s)] = 0.0
      letterHeight = 0.25
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = common\conditions_arrows_symbols.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('condition', u'<<<<<'), ('corrAns', u'left')]),
      OrderedDict([('condition', u'<<><<'), ('corrAns', u'left')]),
      OrderedDict([('condition', u'>>>>>'), ('corrAns', u'right')]),
      OrderedDict([('condition', u'>><>>'), ('corrAns', u'right')])]
    Routine fixation
    Routine trial
  LoopTerminator trials
